// Example parameter file for B-spline registration
// C-style comments: //

// The internal pixel type, used for internal computations
// Leave to float in general. 
// NB: this is not the type of the input images! The pixel 
// type of the input images is automatically read from the 
// images themselves.
// This setting can be changed to "short" to save some memory
// in case of very large 3D images.
(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")

// The dimensions of the fixed and moving image
// NB: This has to be specified by the user. The dimension of
// the images is currently NOT read from the images.
// Also note that some other settings may have to specified
// for each dimension separately.
(FixedImageDimension 3)
(MovingImageDimension 3)

// Specify whether you want to take into account the so-called
// direction cosines of the images. Recommended: true.
// In some cases, the direction cosines of the image are corrupt,
// due to image format conversions for example. In that case, you 
// may want to set this option to "false".
(UseDirectionCosines "true")

// **************** Main Components **************************

// The following components should usually be left as they are:
(Registration "MultiResolutionRegistration")
(Interpolator "BSplineInterpolator")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")

// These may be changed to Fixed/MovingSmoothingImagePyramid.
// See the manual.
(FixedImagePyramid "FixedRecursiveImagePyramid")
(MovingImagePyramid "MovingRecursiveImagePyramid")

// The following components are most important:
// The optimizer AdaptiveStochasticGradientDescent (ASGD) works
// quite ok in general. The Transform and Metric are important
// and need to be chosen careful for each application. See manual.
(Optimizer "AdaptiveStochasticGradientDescent")
(Transform "AffineTransform")
(Metric "AdvancedNormalizedCorrelation")

// ***************** Transformation **************************


// Whether transforms are combined by composition or by addition.
// In generally, Compose is the best option in most cases.
// It does not influence the results very much.
(HowToCombineTransforms "Compose")

// ******************* Similarity measure *********************

// If you use a mask, this option is important. 
// If the mask serves as region of interest, set it to false.
// If the mask indicates which pixels are valid, then set it to true.
// If you do not use a mask, the option doesn't matter.
(ErodeMask "false")

// ******************** Multiresolution **********************

// The number of resolutions. 1 Is only enough if the expected
// deformations are small. 3 or 4 mostly works fine. For large
// images and large deformations, 5 or 6 may even be useful.
(NumberOfResolutions 5)
(ImagePyramidSchedule  16 16 16  8 8 8  4 4 4  2 2 2  1 1 1 )


// ******************* Optimizer ****************************

// Maximum number of iterations in each resolution level:
// 200-2000 works usually fine for nonrigid registration.
// The more, the better, but the longer computation time.
// This is an important parameter!
(MaximumNumberOfIterations 4000 200 100 50 10 )

// The step size of the optimizer, in mm. By default the voxel size is used.
// which usually works well. In case of unusual high-resolution images
// (eg histology) it is necessary to increase this value a bit, to the size
// of the "smallest visible structure" in the image:
(MaximumStepLength 0.3)

(Scales 1000.0)
//(SP_a 200.0 200.0 200.0 200.0 200.0)
 
// **************** Image sampling **********************

(NumberOfSpatialSamples 2048)
(NewSamplesEveryIteration "true")
(ImageSampler "Random")

// ************* Interpolation and Resampling ****************

(BSplineInterpolationOrder 1)

(FinalBSplineInterpolationOrder 3)
(DefaultPixelValue 0)
(WriteResultImage "true")
(ResultImagePixelType "float")
(ResultImageFormat "nrrd")

